Select_Active_File
/FILE_NAME=ALL_FILES
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;

Export_Data_To_Matfile
/SIGNAL_TYPES=METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=COG_Max_StanceX+COG_Max_StanceZ+COG_Min_StanceX+COG_Min_StanceZ+COG_Max_SwingX+COG_Max_SwingZ+COG_Min_SwingX+COG_Min_SwingZ
/FILE_NAME=c:\users\vicon\desktop\temp processing added mass\exportdata\subjectCOG.mat
/MATLAB_NAMES=COGStanceMaxX+COGStanceMaxZ+COGStanceMinX+COGStanceMinZ+COGSwingMaxX+COGSwingMaxZ+COGSwingMinX+COGSwingMinZ
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! /USE_NAN_FOR_DATANOTFOUND=FALSE
;

Export_Data_To_Matfile
/SIGNAL_TYPES=METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC
/SIGNAL_FOLDER=ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED+ANALOG_PROCESSED
/SIGNAL_NAMES=SEMI1+SEMI2+SEMI3+SEMI4+SOLE1+SOLE2+SOLE3+SOLE4+BICE1+BICE2+BICE3+BICE4+GAST1+GAST2+GAST3+GAST4+TIBA1+TIBA2+TIBA3+TIBA4+VASL1+VASL2+VASL3+VASL4+VASM1+VASM2+VASM3+VASM4
/FILE_NAME=c:\users\vicon\desktop\temp processing added mass\exportdata\subjectanalog.mat
/MATLAB_NAMES=SEMI1+SEMI2+SEMI3+SEMI4+SOLE1+SOLE2+SOLE3+SOLE4+BICE1+BICE2+BICE3+BICE4+GAST1+GAST2+GAST3+GAST4+TIBA1+TIBA2+TIBA3+TIBA4+VASL1+VASL2+VASL3+VASL4+VASM1+VASM2+VASM3+VASM4
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;

Export_Data_To_Matfile
/SIGNAL_TYPES=METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC
/SIGNAL_FOLDER=TEMPORAL_DISTANCE+TEMPORAL_DISTANCE+TEMPORAL_DISTANCE+TEMPORAL_DISTANCE+TEMPORAL_DISTANCE+TEMPORAL_DISTANCE+TEMPORAL_DISTANCE+TEMPORAL_DISTANCE+TEMPORAL_DISTANCE+TEMPORAL_DISTANCE+TEMPORAL_DISTANCE+TEMPORAL_DISTANCE+TEMPORAL_DISTANCE+TEMPORAL_DISTANCE+TEMPORAL_DISTANCE+TEMPORAL_DISTANCE+TEMPORAL_DISTANCE
/SIGNAL_NAMES=Stride_Length+Stride_Width+Cycle_Time+Left_Cycle_Time+Left_Stance_Time+Left_Step_Length+Left_Step_Time+Left_Stride_Length+Left_Swing_Time+Right_Cycle_Time+Right_Initial_Double_Limb_Support_Time+Right_Stance_Time+Right_Step_Length+Right_Step_Time+Right_Stride_Length+Right_Swing_Time+Right_Terminal_Double_Limb_Support_Time
/FILE_NAME=c:\users\vicon\desktop\temp processing added mass\exportdata\subjectspatiotemp.mat
/MATLAB_NAMES=StrideLength+StrideWidth+CycleTime+LCycleTime+LStanceTime+LStepLength+LStepTime+LStrideLength+LSwingTime+RCycleTime+RIniDoubleTime+RStanceTime+RStepLength+RStepTime+RStrideLength+RSwingTime+RTerDoubleTime
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;

Export_Data_To_Matfile
/SIGNAL_TYPES=METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=LF_Ankle_LHS+LF_Ankle_LTO+LF_Ankle_Max_Stance+LF_Ankle_Max_Swing+LF_Ankle_Min_Stance+LF_Ankle_Min_Swing+LF_Hip_LHS+LF_Hip_LTO+LF_Hip_Max_Stance+LF_Hip_Max_Swing+LF_Hip_Min_Stance+LF_Hip_Min_Swing+LF_Knee_LHS+LF_Knee_LTO+LF_Knee_Max_Stance+LF_Knee_Max_Swing+LF_Knee_Min_Stance+LF_Knee_Min_Swing
/FILE_NAME=c:\users\vicon\desktop\temp processing added mass\exportdata\subjectForce.mat
/MATLAB_NAMES=LF_Ankle_LHS+LF_Ankle_LTO+LF_Ankle_Max_Stance+LF_Ankle_Max_Swing+LF_Ankle_Min_Stance+LF_Ankle_Min_Swing+LF_Hip_LHS+LF_Hip_LTO+LF_Hip_Max_Stance+LF_Hip_Max_Swing+LF_Hip_Min_Stance+LF_Hip_Min_Swing+LF_Knee_LHS+LF_Knee_LTO+LF_Knee_Max_Stance+LF_Knee_Max_Swing+LF_Knee_Min_Stance+LF_Knee_Min_Swing
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;

Export_Data_To_Matfile
/SIGNAL_TYPES=METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=RF_Ankle_RHS+RF_Ankle_RTO+RF_Ankle_Max_Stance+RF_Ankle_Max_Swing+RF_Ankle_Min_Stance+RF_Ankle_Min_Swing+RF_Hip_RHS+RF_Hip_RTO+RF_Hip_Max_Stance+RF_Hip_Max_Swing+RF_Hip_Min_Stance+RF_Hip_Min_Swing+RF_Knee_RHS+RF_Knee_RTO+RF_Knee_Max_Stance+RF_Knee_Max_Swing+RF_Knee_Min_Stance+RF_Knee_Min_Swing
/FILE_NAME=c:\users\vicon\desktop\temp processing added mass\exportdata\subjectForceR.mat
/MATLAB_NAMES=RF_Ankle_RHS+RF_Ankle_RTO+RF_Ankle_Max_Stance+RF_Ankle_Max_Swing+RF_Ankle_Min_Stance+RF_Ankle_Min_Swing+RF_Hip_RHS+RF_Hip_RTO+RF_Hip_Max_Stance+RF_Hip_Max_Swing+RF_Hip_Min_Stance+RF_Hip_Min_Swing+RF_Knee_RHS+RF_Knee_RTO+RF_Knee_Max_Stance+RF_Knee_Max_Swing+RF_Knee_Min_Stance+RF_Knee_Min_Swing
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;

Export_Data_To_Matfile
/SIGNAL_TYPES=METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=LM_Ankle_LHS+LM_Ankle_LTO+LM_Ankle_Max_Stance+LM_Ankle_Max_Swing+LM_Ankle_Min_Stance+LM_Ankle_Min_Swing+LM_Hip_LHS+LM_Hip_LTO+LM_Hip_Max_Stance+LM_Hip_Max_Swing+LM_Hip_Min_Stance+LM_Hip_Min_Swing+LM_Knee_LHS+LM_Knee_LTO+LM_Knee_Max_Stance+LM_Knee_Max_Swing+LM_Knee_Min_Stance+LM_Knee_Min_Swing
/FILE_NAME=c:\users\vicon\desktop\temp processing added mass\exportdata\subjectMoment.mat
/MATLAB_NAMES=LM_Ankle_LHS+LM_Ankle_LTO+LM_Ankle_Max_Stance+LM_Ankle_Max_Swing+LM_Ankle_Min_Stance+LM_Ankle_Min_Swing+LM_Hip_LHS+LM_Hip_LTO+LM_Hip_Max_Stance+LM_Hip_Max_Swing+LM_Hip_Min_Stance+LM_Hip_Min_Swing+LM_Knee_LHS+LM_Knee_LTO+LM_Knee_Max_Stance+LM_Knee_Max_Swing+LM_Knee_Min_Stance+LM_Knee_Min_Swing
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;

Export_Data_To_Matfile
/SIGNAL_TYPES=METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=RM_Ankle_RHS+RM_Ankle_RTO+RM_Ankle_Max_Stance+RM_Ankle_Max_Swing+RM_Ankle_Min_Stance+RM_Ankle_Min_Swing+RM_Hip_RHS+RM_Hip_RTO+RM_Hip_Max_Stance+RM_Hip_Max_Swing+RM_Hip_Min_Stance+RM_Hip_Min_Swing+RM_Knee_RHS+RM_Knee_RTO+RM_Knee_Max_Stance+RM_Knee_Max_Swing+RM_Knee_Min_Stance+RM_Knee_Min_Swing
/FILE_NAME=c:\users\vicon\desktop\temp processing added mass\exportdata\subjectMomentR.mat
/MATLAB_NAMES=RM_Ankle_RHS+RM_Ankle_RTO+RM_Ankle_Max_Stance+RM_Ankle_Max_Swing+RM_Ankle_Min_Stance+RM_Ankle_Min_Swing+RM_Hip_RHS+RM_Hip_RTO+RM_Hip_Max_Stance+RM_Hip_Max_Swing+RM_Hip_Min_Stance+RM_Hip_Min_Swing+RM_Knee_RHS+RM_Knee_RTO+RM_Knee_Max_Stance+RM_Knee_Max_Swing+RM_Knee_Min_Stance+RM_Knee_Min_Swing
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;

Export_Data_To_Matfile
/SIGNAL_TYPES=METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=L_Ankle_LHS+L_Ankle_LTO+L_Ankle_Max_Stance+L_Ankle_Max_Swing+L_Ankle_Min_Stance+L_Ankle_Min_Swing+L_Hip_LHS+L_Hip_LTO+L_Hip_Max_Stance+L_Hip_Max_Swing+L_Hip_Min_Stance+L_Hip_Min_Swing+L_Knee_LHS+L_Knee_LTO+L_Knee_Max_Stance+L_Knee_Max_Swing+L_Knee_Min_Stance+L_Knee_Min_Swing
/FILE_NAME=c:\users\vicon\desktop\temp processing added mass\exportdata\subjectAngle.mat
/MATLAB_NAMES=L_Ankle_LHS+L_Ankle_LTO+L_Ankle_Max_Stance+L_Ankle_Max_Swing+L_Ankle_Min_Stance+L_Ankle_Min_Swing+L_Hip_LHS+L_Hip_LTO+L_Hip_Max_Stance+L_Hip_Max_Swing+L_Hip_Min_Stance+L_Hip_Min_Swing+L_Knee_LHS+L_Knee_LTO+L_Knee_Max_Stance+L_Knee_Max_Swing+L_Knee_Min_Stance+L_Knee_Min_Swing
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;

Export_Data_To_Matfile
/SIGNAL_TYPES=METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=R_Ankle_RHS+R_Ankle_RTO+R_Ankle_Max_Stance+R_Ankle_Max_Swing+R_Ankle_Min_Stance+R_Ankle_Min_Swing+R_Hip_RHS+R_Hip_RTO+R_Hip_Max_Stance+R_Hip_Max_Swing+R_Hip_Min_Stance+R_Hip_Min_Swing+R_Knee_RHS+R_Knee_RTO+R_Knee_Max_Stance+R_Knee_Max_Swing+R_Knee_Min_Stance+R_Knee_Min_Swing
/FILE_NAME=c:\users\vicon\desktop\temp processing added mass\exportdata\subjectAngleR.mat
/MATLAB_NAMES=R_Ankle_RHS+R_Ankle_RTO+R_Ankle_Max_Stance+R_Ankle_Max_Swing+R_Ankle_Min_Stance+R_Ankle_Min_Swing+R_Hip_RHS+R_Hip_RTO+R_Hip_Max_Stance+R_Hip_Max_Swing+R_Hip_Min_Stance+R_Hip_Min_Swing+R_Knee_RHS+R_Knee_RTO+R_Knee_Max_Stance+R_Knee_Max_Swing+R_Knee_Min_Stance+R_Knee_Min_Swing
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;

