For_Each
/ITERATION_PARAMETER_NAME=currentSubject
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/ITEMS=02+03+04+05+06+07+08+09+10+11+12+13+14+15+16+18+19+20+21+22+23+24+25+26+27+28+29+30+31+32+33+34+35+36
;

File_Open
/FILE_NAME=E:\Visual3D\cmz_05042022\Subject&::currentSubject&ALL.cmz
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! /SET_PROMPT=File_Open
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! /ON_FILE_NOT_FOUND=PROMPT
;

Select_Active_File
/FILE_NAME=ALL_FILES
;

**__Add_a_Comment__**
/COMMENT= Angle
;

Compute_Model_Based_Data
/RESULT_NAME=L_HIP
/FUNCTION=JOINT_ANGLE
/SEGMENT=LTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
! /USE_CARDAN_SEQUENCE=FALSE
! /NORMALIZATION=FALSE
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! /NEGATEX=FALSE
! /NEGATEY=FALSE
! /NEGATEZ=FALSE
! /AXIS1=X
! /AXIS2=Y
! /AXIS3=Z
/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

Compute_Model_Based_Data
/RESULT_NAME=L_KNEE
/FUNCTION=JOINT_ANGLE
/SEGMENT=LSK
/REFERENCE_SEGMENT=LTH
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEX=TRUE
/NEGATEY=TRUE
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

Compute_Model_Based_Data
/RESULT_NAME=L_ANKLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=V Left Foot
/REFERENCE_SEGMENT=LSK
/RESOLUTION_COORDINATE_SYSTEM=
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

Compute_Model_Based_Data
/RESULT_NAME=R_HIP
/FUNCTION=JOINT_ANGLE
/SEGMENT=RTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

Compute_Model_Based_Data
/RESULT_NAME=R_KNEE
/FUNCTION=JOINT_ANGLE
/SEGMENT=RSK
/REFERENCE_SEGMENT=RTH
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEX=TRUE
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/NEGATEZ=TRUE
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

Compute_Model_Based_Data
/RESULT_NAME=R_ANKLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=V Right Foot
/REFERENCE_SEGMENT=RSK
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

**__Add_a_Comment__**
/COMMENT=Moment
;

Compute_Model_Based_Data
/RESULT_NAME=L_HIP_MOMENT
/FUNCTION=JOINT_MOMENT
/SEGMENT=LTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
/USE_CARDAN_SEQUENCE=TRUE
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/NEGATEX=TRUE
/NEGATEY=TRUE
/NEGATEZ=TRUE
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

Compute_Model_Based_Data
/RESULT_NAME=L_KNEE_MOMENT
/FUNCTION=JOINT_MOMENT
/SEGMENT=LSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LTH
/USE_CARDAN_SEQUENCE=TRUE
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

Compute_Model_Based_Data
/RESULT_NAME=L_ANKLE_MOMENT
/FUNCTION=JOINT_MOMENT
/SEGMENT=V Left Foot
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LSK
/USE_CARDAN_SEQUENCE=TRUE
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/NEGATEX=TRUE
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

Compute_Model_Based_Data
/RESULT_NAME=R_HIP_MOMENT
/FUNCTION=JOINT_MOMENT
/SEGMENT=RTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
/USE_CARDAN_SEQUENCE=TRUE
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/NEGATEX=TRUE
/NEGATEY=TRUE
/NEGATEZ=TRUE
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

Compute_Model_Based_Data
/RESULT_NAME=R_KNEE_MOMENT
/FUNCTION=JOINT_MOMENT
/SEGMENT=RSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTH
/USE_CARDAN_SEQUENCE=TRUE
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

Compute_Model_Based_Data
/RESULT_NAME=R_ANKLE_MOMENT
/FUNCTION=JOINT_MOMENT
/SEGMENT=V Right Foot
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RSK
/USE_CARDAN_SEQUENCE=TRUE
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/NEGATEX=TRUE
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

**__Add_a_Comment__**
/COMMENT=Power
;

Compute_Model_Based_Data
/RESULT_NAME=L_HIP_POWER
/FUNCTION=JOINT_POWER
/SEGMENT=LTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

Compute_Model_Based_Data
/RESULT_NAME=L_KNEE_POWER
/FUNCTION=JOINT_POWER
/SEGMENT=LSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LTH
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

Compute_Model_Based_Data
/RESULT_NAME=L_ANKLE_POWER
/FUNCTION=JOINT_POWER
/SEGMENT=V Left Foot
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LSK
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

Compute_Model_Based_Data
/RESULT_NAME=R_HIP_POWER
/FUNCTION=JOINT_POWER
/SEGMENT=RTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

Compute_Model_Based_Data
/RESULT_NAME=R_KNEE_POWER
/FUNCTION=JOINT_POWER
/SEGMENT=RSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTH
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

Compute_Model_Based_Data
/RESULT_NAME=R_ANKLE_POWER
/FUNCTION=JOINT_POWER
/SEGMENT=V Right Foot
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RSK
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

For_Each
/ITERATION_PARAMETER_NAME=TAG_NAME
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 /ITEMS=C + M + F
;

Select_Active_File
/FILE_NAME=::TAG_NAME
;

**__Add_a_Comment__**
/COMMENT= Kinematics
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
! /SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=R_KNEE
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=R_KNEE
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_ANKLE
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=R_ANKLE
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_HIP
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=R_HIP
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_KNEE
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=LHS+LHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=L_KNEE
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_ANKLE
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=LHS+LHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=L_ANKLE
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_HIP
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=LHS+LHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=L_HIP
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

**__Add_a_Comment__**
/COMMENT= Kinetics
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_KNEE_MOMENT
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=R_KNEE_MOMENT
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_ANKLE_MOMENT
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=R_ANKLE_MOMENT
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_HIP_MOMENT
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=R_HIP_MOMENT
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_KNEE_MOMENT
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=LHS+LHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=L_KNEE_MOMENT
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_ANKLE_MOMENT
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=LHS+LHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=L_ANKLE_MOMENT
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_HIP_MOMENT
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=LHS+LHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=L_HIP_MOMENT
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

**__Add_a_Comment__**
/COMMENT= Kinetics
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=R_KNEE_FORCE
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=RF_KNEE
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=R_ANKLE_FORCE
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=RF_ANKLE
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=R_HIP_FORCE
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=RF_HIP
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=L_KNEE_FORCE
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=LHS+LHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=LF_KNEE
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=L_ANKLE_FORCE
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=LHS+LHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=LF_ANKLE
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=L_HIP_FORCE
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=LHS+LHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=LF_HIP
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

**__Add_a_Comment__**
/COMMENT=Kinetics
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_HIP_POWER
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=R_HIP_POWER
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_KNEE_POWER
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=R_KNEE_POWER
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_ANKLE_POWER
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=R_ANKLE_POWER
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_HIP_POWER
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=LHS+LHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=L_HIP_POWER
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_KNEE_POWER
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=LHS+LHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=L_KNEE_POWER
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

Concatenate_Time_Normalized_Signals
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_ANKLE_POWER
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=LHS+LHS
/EXCLUDE_EVENTS=DEL
/RESULT_FOLDERS=NORMALIZED
/RESULT_NAME=L_ANKLE_POWER
/NORMALIZE_POINTS=101
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/CREATE_PER_FILE=TRUE
;

End_For_Each
/ITERATION_PARAMETER_NAME=TAG_NAME
;

Metric_From_C3D_Parameter
/METRIC_NAME=subjectName
/PARAMETER_GROUP=SUBJECTS
/PARAMETER_NAME=NAMES
;

For_Each
/ITERATION_PARAMETER_NAME=FileNo
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/ITEMS=00_C+00_M+00_F+11_C+11_M+11_F+12_C+12_M+12_F+13_C+13_M+13_F+21_C+21_M+21_F+22_C+22_M+22_F+23_C+23_M+23_F+31_C+31_M+31_F+32_C+32_M+32_F+33_C+33_M+33_F
;

Select_Active_File
/FILE_NAME=*&::FileNo&.c3d
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;

Export_Data_To_Matfile
/SIGNAL_TYPES=LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+METRIC+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+FRAME_NUMBERS+EVENT_LABEL+EVENT_LABEL+MODEL+MODEL+MODEL
/SIGNAL_FOLDER=ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+PROCESSED+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+METRIC+METRIC+METRIC
/SIGNAL_NAMES=R_HIP_MOMENT+R_KNEE_MOMENT+R_ANKLE_MOMENT+R_HIP+R_KNEE+R_ANKLE+L_HIP_MOMENT+L_KNEE_MOMENT+L_ANKLE_MOMENT+L_HIP+L_KNEE+L_ANKLE+R_HIP_POWER+R_KNEE_POWER+R_ANKLE_POWER+L_ANKLE_POWER+L_KNEE_POWER+L_HIP_POWER+R_HIP_MOMENT+R_KNEE_MOMENT+R_ANKLE_MOMENT+R_HIP+R_KNEE+R_ANKLE+L_HIP_MOMENT+L_KNEE_MOMENT+L_ANKLE_MOMENT+L_HIP+L_KNEE+L_ANKLE+R_HIP_POWER+R_KNEE_POWER+R_ANKLE_POWER+L_ANKLE_POWER+L_KNEE_POWER+L_HIP_POWER+MASS+LHS+LTO+RHS+RTO+TIME+DEL+DEL1+SPEED_C+SPEED_M+SPEED_F
/FILE_NAME=E:\Visual3D\Saves\V3DAMT_Subject&::currentSubject&_&::FileNo&.mat
/MATLAB_NAMES=momentHipR+momentKneeR+momentAnkleR+angleHipR+angleKneeR+angleAnkleR+momentHipL+momentKneeL+momentAnkleL+angleHipL+angleKneeL+angleAnkleL+powerHipR+powerKneeR+powerAnkleR+powerAnkleL+powerKneeL+powerHipL+momentHipR101+momentKneeR101+momentAnkleR101+angleHipR101+angleKneeR101+angleAnkleR101+momentHipL101+momentKneeL101+momentAnkleL101+angleHipL101+angleKneeL101+angleAnkleL101+powerHipR101+powerKneeR101+powerAnkleR101+powerAnkleL101+powerKneeL101+powerHipL101+massBaseline+timestampsLHS+timestampsLTO+timestampsRHS+timestampsRTO+visual3dTime+timestampsDEL+timestampsDEL1+speedC+speedM+speedF
/PARAMETER_NAMES=NAMES
/PARAMETER_GROUPS=SUBJECTS
/OUTPUT_PARAMETER_NAMES=currentSubject
/USE_NAN_FOR_DATANOTFOUND=TRUE
;

End_For_Each
/ITERATION_PARAMETER_NAME=FileNo
;

File_Close
/FILE_NAME=ALL_FILES
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;

Exit_Workspace

;

Close_Calibration_File
/CALIBRATION_FILE=ALL_FILES
;

Unload_CMO_Library

;

End_For_Each
/ITERATION_PARAMETER_NAME=currentSubject
;

