Select_Active_File
/FILE_NAME=ALL_FILES
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;

Export_Data_To_Matfile
/SIGNAL_TYPES=DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+ DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+ DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+ DERIVED+DERIVED+DERIVED+DERIVED
/SIGNAL_FOLDER=ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL
/SIGNAL_NAMES=GASTP1+GASTP2+GASTP3+GASTP4+HAMSMP1+HAMSMP2+HAMSMP3+HAMSMP4+HAMSP1+HAMSP2+HAMSP3+HAMSP4+LATSP1+LATSP2+LATSP3+LATSP4+SOLP1+SOLP2+SOLP3+SOLP4+TIBP1+TIBP2+TIBP3+TIBP4+VASTMP1+VASTMP2+VASTMP3+VASTMP4
/FILE_NAME=c:\users\vicon\desktop\temp processing added mass\exportdata\subjectEMG1.mat
/MATLAB_NAMES=GASTP1+GASTP2+GASTP3+GASTP4+HAMSMP1+HAMSMP2+HAMSMP3+HAMSMP4+HAMSP1+HAMSP2+HAMSP3+HAMSP4+LATSP1+LATSP2+LATSP3+LATSP4+SOLP1+SOLP2+SOLP3+SOLP4+TIBP1+TIBP2+TIBP3+TIBP4+VASTMP1+VASTMP2+VASTMP3+VASTMP4
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! /USE_NAN_FOR_DATANOTFOUND=FALSE
;

