Select_Active_File
/FILE_NAME=ALL_FILES
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;

Export_Data_To_Matfile
/SIGNAL_TYPES=DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED
/SIGNAL_FOLDER=NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED
/SIGNAL_NAMES=R_KNEE+R_ANKLE+R_HIP+RM_KNEE+RM_ANKLE+RM_HIP+RF_KNEE+RF_ANKLE+RF_HIP+L_KNEE+L_ANKLE+L_HIP+LF_KNEE+LF_ANKLE+LF_HIP+LM_KNEE+LM_ANKLE+LM_HIP
/FILE_NAME=c:\users\vicon\desktop\temp processing added mass\exportdata\NormalizedData.mat
/MATLAB_NAMES=R_KNEE+R_ANKLE+R_HIP+RM_KNEE+RM_ANKLE+RM_HIP+RF_KNEE+RF_ANKLE+RF_HIP+L_KNEE+L_ANKLE+L_HIP+LF_KNEE+LF_ANKLE+LF_HIP+LM_KNEE+LM_ANKLE+LM_HIP
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! /USE_NAN_FOR_DATANOTFOUND=FALSE
;

