For_Each
/ITERATION_PARAMETER_NAME=TAG_NAME
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/ITEMS=C + M + F
;

Select_Active_File
/FILE_NAME=::TAG_NAME
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;

**__Add_a_Comment__**
 /COMMENT=Ankle
;

Metric_Maximum
! /RESULT_METRIC_FOLDER=PROCESSED
/RESULT_METRIC_NAME=RF_Ankle_Max_Stance
! /APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
/SIGNAL_TYPES=LINK_MODEL_BASED
! /SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=R_ANKLE_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=RHS+LTO+LHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
! /APPEND_TO_EXISTING_VALUES=FALSE
! /CREATE_GLOBAL_MAXIMUM=FALSE
;

Metric_Minimum
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/RESULT_METRIC_NAME=RF_Ankle_Min_Stance
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_ANKLE_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=RHS+LTO+LHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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! /CREATE_GLOBAL_MINIMUM=FALSE
;

Metric_Maximum
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/RESULT_METRIC_NAME=RF_Ankle_Max_Swing
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_ANKLE_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=RTO+RHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Minimum
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/RESULT_METRIC_NAME=RF_Ankle_Min_Swing
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_ANKLE_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=RTO+RHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Signal_Value_At_Event
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_ANKLE_FORCE
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/RESULT_METRIC_NAME=RF_Ankle_RHS
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/COMPONENT_SEQUENCE=Z
/EVENT_NAME=RHS
/EVENT_INSTANCE=
/GENERATE_MEAN_AND_STDDEV=FALSE
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! /GENERATE_VECTOR_LENGTH_METRIC=FALSE
! /RETAIN_NO_DATA_VALUES=FALSE
;

Metric_Signal_Value_At_Event
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_ANKLE_FORCE
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/RESULT_METRIC_NAME=RF_Ankle_RTO
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/COMPONENT_SEQUENCE=Z
/EVENT_NAME=RTO
/EVENT_INSTANCE=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

**__Add_a_Comment__**
 /COMMENT=Knee
;

Metric_Maximum
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/RESULT_METRIC_NAME=RF_Knee_Max_Stance
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_KNEE_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=RHS+LTO+LHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Minimum
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/RESULT_METRIC_NAME=RF_Knee_Min_Stance
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_KNEE_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=RHS+LTO+LHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Maximum
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/RESULT_METRIC_NAME=RF_Knee_Max_Swing
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_KNEE_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=RTO+RHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Minimum
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/RESULT_METRIC_NAME=RF_Knee_Min_Swing
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_KNEE_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=RTO+RHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Signal_Value_At_Event
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_KNEE_FORCE
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/RESULT_METRIC_NAME=RF_Knee_RHS
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/COMPONENT_SEQUENCE=Z
/EVENT_NAME=RHS
/EVENT_INSTANCE=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Signal_Value_At_Event
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_KNEE_FORCE
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/RESULT_METRIC_NAME=RF_Knee_RTO
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/COMPONENT_SEQUENCE=Z
/EVENT_NAME=RTO
/EVENT_INSTANCE=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

**__Add_a_Comment__**
 /COMMENT=Hip
;

Metric_Maximum
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/RESULT_METRIC_NAME=RF_Hip_Max_Stance
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_HIP_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=RHS+LTO+LHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Minimum
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/RESULT_METRIC_NAME=RF_Hip_Min_Stance
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_HIP_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=RHS+LTO+LHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Maximum
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/RESULT_METRIC_NAME=RF_Hip_Max_Swing
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_HIP_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=RTO+RHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Minimum
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/RESULT_METRIC_NAME=RF_Hip_Min_Swing
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_HIP_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=RTO+RHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Signal_Value_At_Event
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_HIP_FORCE
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/RESULT_METRIC_NAME=RF_Hip_RHS
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/COMPONENT_SEQUENCE=Z
/EVENT_NAME=RHS
/EVENT_INSTANCE=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Signal_Value_At_Event
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=R_HIP_FORCE
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/RESULT_METRIC_NAME=RF_Hip_RTO
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/COMPONENT_SEQUENCE=Z
/EVENT_NAME=RTO
/EVENT_INSTANCE=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

**__Add_a_Comment__**
 /COMMENT=Left Ankle
;

Metric_Maximum
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/RESULT_METRIC_NAME=LF_Ankle_Max_Stance
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_ANKLE_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=LHS+RTO+RHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Minimum
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/RESULT_METRIC_NAME=LF_Ankle_Min_Stance
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_ANKLE_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=LHS+RTO+RHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Maximum
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/RESULT_METRIC_NAME=LF_Ankle_Max_Swing
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_ANKLE_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=LTO+LHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Minimum
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/RESULT_METRIC_NAME=LF_Ankle_Min_Swing
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_ANKLE_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=LTO+LHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Signal_Value_At_Event
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_ANKLE_FORCE
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/RESULT_METRIC_NAME=LF_Ankle_LHS
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/COMPONENT_SEQUENCE=Z
/EVENT_NAME=LHS
/EVENT_INSTANCE=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Signal_Value_At_Event
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_ANKLE_FORCE
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/RESULT_METRIC_NAME=LF_Ankle_LTO
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/COMPONENT_SEQUENCE=Z
/EVENT_NAME=LTO
/EVENT_INSTANCE=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

**__Add_a_Comment__**
 /COMMENT=Left Knee
;

Metric_Maximum
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/RESULT_METRIC_NAME=LF_Knee_Max_Stance
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_KNEE_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=LHS+RTO+RHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Minimum
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/RESULT_METRIC_NAME=LF_Knee_Min_Stance
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_KNEE_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=LHS+RTO+RHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Maximum
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/RESULT_METRIC_NAME=LF_Knee_Max_Swing
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_KNEE_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=LTO+LHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Minimum
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/RESULT_METRIC_NAME=LF_Knee_Min_Swing
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_KNEE_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=LTO+LHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Signal_Value_At_Event
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_KNEE_FORCE
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/RESULT_METRIC_NAME=LF_Knee_LHS
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/COMPONENT_SEQUENCE=Z
/EVENT_NAME=LHS
/EVENT_INSTANCE=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Signal_Value_At_Event
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_KNEE_FORCE
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/RESULT_METRIC_NAME=LF_Knee_LTO
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/COMPONENT_SEQUENCE=Z
/EVENT_NAME=LTO
/EVENT_INSTANCE=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

**__Add_a_Comment__**
 /COMMENT=Left Hip
;

Metric_Maximum
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/RESULT_METRIC_NAME=LF_Hip_Max_Stance
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_HIP_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=LHS+RTO+RHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Minimum
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/RESULT_METRIC_NAME=LF_Hip_Min_Stance
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_HIP_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=LHS+RTO+RHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Maximum
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/RESULT_METRIC_NAME=LF_Hip_Max_Swing
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_HIP_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=LTO+LHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Minimum
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/RESULT_METRIC_NAME=LF_Hip_Min_Swing
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_HIP_FORCE
/COMPONENT_SEQUENCE=Z
/EVENT_SEQUENCE=LTO+LHS
/EXCLUDE_EVENTS=DEL+DEL1
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Signal_Value_At_Event
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_HIP_FORCE
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/RESULT_METRIC_NAME=LF_Hip_LHS
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/COMPONENT_SEQUENCE=Z
/EVENT_NAME=LHS
/EVENT_INSTANCE=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Signal_Value_At_Event
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=L_HIP_FORCE
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/RESULT_METRIC_NAME=LF_Hip_LTO
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/COMPONENT_SEQUENCE=Z
/EVENT_NAME=LTO
/EVENT_INSTANCE=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

End_For_Each
/ITERATION_PARAMETER_NAME=TAG_NAME
;

