Select_Active_File
/FILE_NAME=00
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;

Export_Data_To_Matfile
/SIGNAL_TYPES=LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+EVENT_LABEL+EVENT_LABEL+FRAME_NUMBERS+EVENT_LABEL+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG
/SIGNAL_FOLDER=ORIGINAL+ORIGINAL+ORIGINAL+PROCESSED+PROCESSED+PROCESSED+ORIGINAL+ORIGINAL+ORIGINAL+PROCESSED+PROCESSED+PROCESSED+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=R_KNEE+R_ANKLE+R_HIP+R_KNEE_MOMENT+R_ANKLE_MOMENT+R_HIP_MOMENT+L_KNEE+L_ANKLE+L_HIP+L_KNEE_MOMENT+L_ANKLE_MOMENT+L_HIP_MOMENT+RHS+LHS+TIME+DEL+GAST+SOLE+TIBA+VASL+VASM
/FILE_NAME=C:\Users\Vicon\Desktop\nlrandSPM\Data.mat
/MATLAB_NAMES=R_KNEE+R_ANKLE+R_HIP+R_KNEE_MOMENT+R_ANKLE_MOMENT+R_HIP_MOMENT+L_KNEE+L_ANKLE+L_HIP+L_KNEE_MOMENT+L_ANKLE_MOMENT+L_HIP_MOMENT+RHS+LHS+TIME+DEL+GAST+SOLE+TIBA+VASL+VASM

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! /USE_NAN_FOR_DATANOTFOUND=FALSE
;

