For_Each
/ITERATION_PARAMETER_NAME=currentSubject
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/ITEMS=19
;

File_Open
/FILE_NAME=C:\Users\Vicon\Desktop\Temp Processing Added Mass\Test\Outlier Test\Subject&::currentSubject&ALL.cmz
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! /SET_PROMPT=File_Open
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! /ON_FILE_NOT_FOUND=PROMPT
;

Select_Active_File
/FILE_NAME=ALL_FILES
;

Metric_From_C3D_Parameter
/METRIC_NAME=subjectName
/PARAMETER_GROUP=SUBJECTS
/PARAMETER_NAME=NAMES
;

For_Each
/ITERATION_PARAMETER_NAME=FileNo
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/ITEMS=00_C+00_M+00_F+11_C+11_M+11_F+12_C+12_M+12_F+13_C+13_M+13_F+21_C+21_M+21_F+22_C+22_M+22_F+23_C+23_M+23_F+31_C+31_M+31_F+32_C+32_M+32_F+33_C+33_M+33_F
;

Select_Active_File
/FILE_NAME=*&::FileNo&.c3d
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;

Export_Data_To_Matfile
/SIGNAL_TYPES=DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+FRAME_NUMBERS+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL
/SIGNAL_FOLDER=NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+NORMALIZED+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL
/SIGNAL_NAMES=RM_HIP+RM_KNEE+RM_ANKLE+LM_HIP+LM_KNEE+LM_ANKLE+TIME+LHS+LTO+RHS+RTO+DEL
/FILE_NAME=C:\Users\Vicon\Desktop\Temp Processing Added Mass\Saves_05052022\Saves_05262022\V3DAMT_Subject&::currentSubject&_&::FileNo&.mat
/MATLAB_NAMES=momentHipR+momentKneeR+momentAnkleR+momentHipL+momentKneeL+momentAnkleL+visual3dTime+timestampsLHS+timestampsLTO+timestampsRHS+timestampsRTO+timestampsDEL
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! /USE_NAN_FOR_DATANOTFOUND=FALSE
;

End_For_Each
/ITERATION_PARAMETER_NAME=FileNo
;

