Select_Active_File
/FILE_NAME=Test
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;

Event_Onset
/SIGNAL_TYPES=ANALOG
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Force.Fx1
/EVENT_NAME=Test
! /SELECT_X=TRUE
! /SELECT_Y=FALSE
! /SELECT_Z=FALSE
/THRESHOLD=-0.0001
! /THRESHOLD_INSTANCE=0
! /BASELINE=0
! /FRAME_OFFSET=0
/FRAME_WINDOW=12
! /ASCENDING=FALSE
/DESCENDING=TRUE
/START_AT_EVENT=LHS
/END_AT_EVENT=RTO
;

Event_Between
/NEW_EVENT_NAME=TEMP
! /RANGE_INSTANCE=0
/EVENT_SEQUENCE=RHS+LTO
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/FRAME_OFFSET=
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/PERCENT_OFFSET=90
;

Event_Onset
/SIGNAL_TYPES=ANALOG
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Force.Fx1
/EVENT_NAME=Test1
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/THRESHOLD=0.0001
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/FRAME_WINDOW=12
/ASCENDING=TRUE
! /DESCENDING=FALSE
/START_AT_EVENT=TEMP
/END_AT_EVENT=LTO
;

