Select_Active_File
/FILE_NAME=33_1
;

**__Lower Limb Moment Calculations__**

;

Compute_Model_Based_Data
/RESULT_NAME=L_HIP_MOMENT
/FUNCTION=JOINT_MOMENT
/SEGMENT=LTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LTH
/USE_CARDAN_SEQUENCE=TRUE
! /NORMALIZATION=FALSE
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/NEGATEX=TRUE
/NEGATEY=TRUE
/NEGATEZ=TRUE
! /AXIS1=X
! /AXIS2=Y
! /AXIS3=Z
/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

Compute_Model_Based_Data
/RESULT_NAME=L_KNEE_MOMENT
/FUNCTION=JOINT_MOMENT
/SEGMENT=LSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LTH
/USE_CARDAN_SEQUENCE=TRUE
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! /NEGATEX=FALSE
! /NEGATEY=FALSE
! /NEGATEZ=FALSE
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/TREADMILL_DATA=TRUE
/TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
/TREADMILL_SPEED=MODEL::METRIC::SPEED_&::TAG_NAME
;

Select_Active_File
/FILE_NAME=33_1
;

**__Lower Limb Moment Calculations__**

;

Divide_Signal_By_Constant
 /SIGNAL_TYPES=LINK_MODEL_BASED
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=L_HIP_MOMENT
/SIGNAL_COMPONENTS=ALL
/RESULT_TYPES=LINK_MODEL_BASED
/RESULT_FOLDERS=PROCESSED
/RESULT_NAME=L_HIP_MOMENT
/APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
/CONSTANT=GLOBAL::METRIC::WEIGHT::WEIGHT
;

Divide_Signal_By_Constant
/SIGNAL_TYPES=LINK_MODEL_BASED
! /SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=L_KNEE_MOMENT
/SIGNAL_COMPONENTS=ALL
/RESULT_TYPES=LINK_MODEL_BASED
/RESULT_FOLDERS=PROCESSED
/RESULT_NAME=L_KNEE_MOMENT
/APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
/CONSTANT=GLOBAL::METRIC::WEIGHT::WEIGHT
;

