Select_Active_File
/FILE_NAME=Test
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;

Set_Data_To_New_Values
/SIGNAL_TYPES=ANALOG
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Force.Fz1
! /SIGNAL_COMPONENTS=ALL_COMPONENTS
/RESULT_TYPES=ANALOG
! /RESULT_FOLDERS=PROCESSED
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/EVENT_SEQUENCE=RHS+LTO+LHS+RTO
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! /EVENT_INSTANCE=0
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! /USE_POINT_RATE=TRUE
/REPLACEMENT_VALUES=0
/THRESHOLD_HIGH=-0.3
! /THRESHOLD_LOW=NO_DATA
! /SET_DATA_AT_SINGLE_EVENT=FALSE
;

Set_Data_To_New_Values
/SIGNAL_TYPES=ANALOG
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Force.Fz2
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/RESULT_TYPES=ANALOG
 /RESULT_FOLDERS=PROCESSED
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/EVENT_SEQUENCE=RHS+LTO+LHS+RTO
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/REPLACEMENT_VALUES=0
/THRESHOLD_HIGH=-0.01
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;

