Select_Active_File
/FILE_NAME=ALL_FILES
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;

Metric_Event_Sequence_Count
! /RESULT_METRIC_FOLDER=PROCESSED
/RESULT_METRIC_NAME=GaitCyclesR
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/EVENT_SEQUENCE=RHS+LTO+LHS+RTO+RHS
/EXCLUDE_EVENTS=DEL
/GENERATE_COUNT_TOTAL_IN_GLOBAL=FALSE
;

Metric_Event_Sequence_Count
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/RESULT_METRIC_NAME=GaitCyclesL
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/EVENT_SEQUENCE=LHS+RTO+RHS+LTO+LHS
/EXCLUDE_EVENTS=DEL
/GENERATE_COUNT_TOTAL_IN_GLOBAL=FALSE
;

For_Each
/ITERATION_PARAMETER_NAME=currentSubject
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/ITEMS=30
;

Select_Active_File
/FILE_NAME=ALL_FILES
;

Metric_From_C3D_Parameter
/METRIC_NAME=subjectName
/PARAMETER_GROUP=SUBJECTS
/PARAMETER_NAME=NAMES
;

For_Each
/ITERATION_PARAMETER_NAME=FileNo
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/ITEMS=00_C+00_M+00_F+11_C+11_M+11_F+12_C+12_M+12_F+13_C+13_M+13_F+21_C+21_M+21_F+22_C+22_M+22_F+23_C+23_M+23_F+31_C+31_M+31_F+32_C+32_M+32_F+33_C+33_M+33_F
;

Select_Active_File
/FILE_NAME=*&::FileNo&*.c3d
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;

Export_Data_To_Matfile
/SIGNAL_TYPES=LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+FRAME_NUMBERS+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+METRIC+METRIC
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+PROCESSED+PROCESSED
/SIGNAL_NAMES=R_HIP_MOMENT+R_KNEE_MOMENT+R_ANKLE_MOMENT+L_HIP_MOMENT+L_KNEE_MOMENT+L_ANKLE_MOMENT+TIME+LHS+LTO+RHS+RTO+DEL+GaitCyclesR+GaitCyclesL
/FILE_NAME=C:\Users\Vicon\Desktop\Temp Processing Added Mass\Saves_05052022\Saves_05052022\V3DAMT_Subject&::currentSubject&_&::FileNo&.mat
/MATLAB_NAMES=momentHipR+momentKneeR+momentAnkleR+momentHipL+momentKneeL+momentAnkleL+visual3dTime+timestampsLHS+timestampsLTO+timestampsRHS+timestampsRTO+timestampsDEL+numGaitCyclesR+numGaitCyclesL
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! /USE_NAN_FOR_DATANOTFOUND=FALSE
;

End_For_Each
/ITERATION_PARAMETER_NAME=FileNo
;

